PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = weimo_psychopy
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine parameters
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    CodeComponent set_params
      Code Type = Auto->JS
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      Before Experiment:
        numReps = 2
        # number of loops per block
        numBlocks = 2
        # number of blocks
        numPractice = 3
        # number of practice reps
  Routine go_cue
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    TextComponent go_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Move whenever you want.
        Please press space when you move.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine ready_cue
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    TextComponent ready_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Be ready to move
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  Routine small_wait
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    TextComponent rest_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Rest
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  Routine welcome
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    TextComponent welcome_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        It will consist of of 4 blocks of 24 trials of self initiated movement which should take roughly 30 minutes.
        This will then be followed by a few trials of self initiated jaw clenches.
        Please press space to move along.
    KeyboardComponent press_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_break
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    TextComponent block_break_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = You have completed a block, enjoy a 60 second rest!
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  Routine thanks
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    TextComponent thanks_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Thank you for participating!
        The application will close in a few seconds
  Routine prac_done
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    TextComponent prac_done_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now completed the practice.
        Press space when ready to move on.
    KeyboardComponent press_space_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine parameters
  Routine welcome
  LoopInitiator practice loopType="TrialHandler"
    loopType = random
    nReps = numPractice
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    Routine fixation
    Routine ready_cue
    Routine go_cue
    Routine small_wait
  LoopTerminator practice
  Routine prac_done
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = numBlocks
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = numReps
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      Routine fixation
      Routine ready_cue
      Routine go_cue
      Routine small_wait
    LoopTerminator trials
    Routine block_break
  LoopTerminator block
  Routine thanks
